PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Motor Sequence learning task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = $(-0.2549, 0.2392, 0.2549)
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent Probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text [set every repeat]:
        In this experiment, you will see four rectangles, with a triangle appearing above one of them. Your task is to press the corresponding key as quickly and accurately as possible.

        Leftmost rectangle: Press Z

        Second rectangle from the left: Press X

        Third rectangle from the left: Press C

        Rightmost rectangle: Press V

        Please respond as quickly and accurately as possible whenever a triangle appears.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        In this experiment, you will see four rectangles, with a triangle appearing above one of them. Your task is to press the corresponding key as quickly and accurately as possible.

        Leftmost rectangle: Press Z

        Second rectangle from the left: Press X

        Third rectangle from the left: Press C

        Rightmost rectangle: Press V

        Please respond as quickly and accurately as possible whenever a triangle appears.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequence_con - Sheet1.csv
    loopType = sequential
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sequence_con - Sheet1.csv
    loopType = fullRandom
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials_2
