PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions_
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Welcome
        In this task, the words RED and BLUE will appear on the screen in either red or blue ink.

        Your task is to identify the colour of the ink, while ignoring the meaning of the word.

        If the word is written in red ink, press the “R” key.
        If the word is written in blue ink, press the “B” key.

        Remember: Respond only to the ink colour, not to the word itself.

        Please respond as quickly and accurately as possible.

        Press the SPACE BAR when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you
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Flow
  Routine Instructions_
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/rutushah/Downloads/PyshcoPy Experiments/Stroop task/conditions- stroop task  - Sheet1.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('word', 'RED'), ('colour', 'red'), ('stim_condition', 'C'), ('correct_response', 'r')]),
      OrderedDict([('word', 'RED'), ('colour', 'blue'), ('stim_condition', 'I'), ('correct_response', 'b')]),
      OrderedDict([('word', 'BLUE'), ('colour', 'red'), ('stim_condition', 'I'), ('correct_response', 'r')]),
      OrderedDict([('word', 'BLUE'), ('colour', 'blue'), ('stim_condition', 'C'), ('correct_response', 'b')])]
    Routine trial
  LoopTerminator trials
  Routine Thanks
