PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Visual_search task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent Target
      letterHeight = 0.05
      pos [set every repeat] = (random ()-0.5, random ()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_Distractor = 10
            thisExp.addData('num_Distractor', num_Distractor)
        else:
            num_Distractor = 5
            thisExp.addData('num_Distractor', num_Distractor)

        distractors = []

        for i in range(num_Distractor):
            Distractor = visual.TextStim(
                win=win,
                name='Distractor',
                text='L',
                font='Arial',
                pos=(random() - 0.5, random() - 0.5),
                draggable=False,
                height=0.05,
                wrapWidth=None,
                ori=randint(1, 360),
                color='white',
                colorSpace='rgb',
                opacity=None,
                languageStyle='LTR',
                depth=-2.0
            )

            distractors.append(Distractor)

        for Distractor in distractors:
            Distractor.setAutoDraw(True)
      End Routine:
        for Distractor in distractors:
            Distractor.setAutoDraw(False)
    MouseComponent mouse
      clickable = Target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
